PsychoPy2experiment version="2024.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1536, 864]
  expName = test_reading
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        to a number of problems, including decreased alertness, decreased ability to concentrate, and increased stress levels. It can also lead to physical problems such as headaches, heart disease, and obesity. Studies have also shown that lack of sleep can affect memory and decision-making abilities. In order to get the most
Flow
  Routine trial
